<?xml version="1.0" encoding="UTF-8"?>
<msg:GetMdibResponse xmlns:msg="http://standards.ieee.org/downloads/11073/11073-10207-2017/message" xmlns:pm="http://standards.ieee.org/downloads/11073/11073-10207-2017/participant" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:ext="http://standards.ieee.org/downloads/11073/11073-10207-2017/extension" SequenceId="1">
    <msg:Mdib MdibVersion="1" SequenceId="1">
        <pm:MdDescription DescriptionVersion="1">
            <pm:Mds Handle="mds_1">
                <pm:AlertSystem xsi:type="pm:AlertSystemDescriptor" Handle="mds_al_system">
                </pm:AlertSystem>
                <pm:Sco Handle="sco_mds">
                    <pm:Operation xsi:type="pm:SetContextStateOperationDescriptor" Handle="set_patient_context_op" OperationTarget="pat_context_descriptor" Retriggerable="true"/>
                    <pm:Operation xsi:type="pm:SetContextStateOperationDescriptor" Handle="set_ensemble_context_op" OperationTarget="ens_context_descriptor" Retriggerable="true"/>
                </pm:Sco>
                <pm:SystemContext Handle="sys_context_1">
                    <pm:PatientContext xsi:type="pm:PatientContextDescriptor" Handle="pat_context_descriptor" />
                    <pm:LocationContext xsi:type="pm:LocationContextDescriptor" Handle="loc_context_descriptor" />
                    <pm:EnsembleContext xsi:type="pm:EnsembleContextDescriptor" Handle="ens_context_descriptor" />
                    <pm:WorkflowContext xsi:type="pm:WorkflowContextDescriptor" Handle="wrkflow_context_descriptor" />
                </pm:SystemContext>
                <pm:Clock Handle="clock">
                    <pm:TimeProtocol Code="532225">
                        <pm:ConceptDescription Lang="en-us">NTPv4</pm:ConceptDescription>
                    </pm:TimeProtocol>
                </pm:Clock>

                <pm:Vmd Handle="vmd_1">
                    <pm:AlertSystem xsi:type="pm:AlertSystemDescriptor" Handle="al_system_temperature">
                        <pm:AlertCondition xsi:type="pm:AlertConditionDescriptor" Handle="al_condition_temperature" Kind="Phy" Priority="None">
                            <pm:Source>temperature</pm:Source>
                        </pm:AlertCondition>
                        <pm:AlertSignal xsi:type="pm:AlertSignalDescriptor" Handle="al_signal_temperature" ConditionSignaled="al_condition_temperature"
                                        Manifestation="Aud" SignalDelegationSupported="true" Latching="true">
                        </pm:AlertSignal>
                    </pm:AlertSystem>
                    <pm:Sco Handle="sco_1">
                        <pm:Operation xsi:type="pm:SetAlertStateOperationDescriptor" Handle="temperature_alert_control" OperationTarget="al_signal_temperature" Retriggerable="true">
                            <pm:ModifiableData>Presence</pm:ModifiableData>
                            <pm:ModifiableData>ActivationState</pm:ModifiableData>
                            <pm:ModifiableData>ActualSignalGenerationDelay</pm:ModifiableData>
                        </pm:Operation>
                        <pm:Operation xsi:type="pm:SetMetricStateOperationDescriptor" Handle="temperature_threshold_control" OperationTarget="temperature" Retriggerable="true" />
                    </pm:Sco>
                    <pm:Channel Handle="sense-hat_channel_1">
                        <pm:Metric xsi:type="pm:NumericMetricDescriptor" Handle="device_health" MetricCategory="Msrmt" MetricAvailability="Cont" Resolution="1">
                            <pm:Unit Code="%"></pm:Unit>
                            <pm:TechnicalRange Lower="0" Upper="100"></pm:TechnicalRange>
                        </pm:Metric>
                        <pm:Metric xsi:type="pm:NumericMetricDescriptor" Handle="temperature" MetricCategory="Msrmt" MetricAvailability="Cont" Resolution="1">
                            <pm:Unit Code="°"></pm:Unit>
                        </pm:Metric>
                        <pm:Metric xsi:type="pm:NumericMetricDescriptor" Handle="device_id" MetricCategory="Set" MetricAvailability="Cont" Resolution="1">
                            <pm:Unit Code="id" />
                        </pm:Metric>
                        <pm:Metric xsi:type="pm:EnumStringMetricDescriptor" Handle="system_statemachine" MetricCategory="Msrmt" MetricAvailability="Cont">
                            <pm:Unit Code="262656"/>
                            <pm:AllowedValue><pm:Value>Idle</pm:Value></pm:AllowedValue>
                            <pm:AllowedValue><pm:Value>Running</pm:Value></pm:AllowedValue>
                            <pm:AllowedValue><pm:Value>Aborted</pm:Value></pm:AllowedValue>
                            <pm:AllowedValue><pm:Value>Complete</pm:Value></pm:AllowedValue>
                        </pm:Metric>
                    </pm:Channel>
                </pm:Vmd>

                <pm:Vmd Handle="vmd_2">
                    <pm:AlertSystem xsi:type="pm:AlertSystemDescriptor" Handle="al_system_humidity">
                        <pm:AlertCondition xsi:type="pm:AlertConditionDescriptor" Handle="al_condition_humidity" Kind="Phy" Priority="None">
                            <pm:Source>humidity</pm:Source>
                        </pm:AlertCondition>
                        <pm:AlertSignal xsi:type="pm:AlertSignalDescriptor" Handle="al_signal_humidity" ConditionSignaled="al_condition_humidity"
                                        Manifestation="Aud" SignalDelegationSupported="true" Latching="true">
                        </pm:AlertSignal>
                    </pm:AlertSystem>
                    <pm:Sco Handle="sco_2">
                        <pm:Operation xsi:type="pm:SetAlertStateOperationDescriptor" Handle="humidity_alert_control" OperationTarget="al_signal_humidity" Retriggerable="true">
                            <pm:ModifiableData>Presence</pm:ModifiableData>
                            <pm:ModifiableData>ActivationState</pm:ModifiableData>
                            <pm:ModifiableData>ActualSignalGenerationDelay</pm:ModifiableData>
                        </pm:Operation>
                        <pm:Operation xsi:type="pm:SetMetricStateOperationDescriptor" Handle="humidity_threshold_control" OperationTarget="humidity" Retriggerable="true" />
                    </pm:Sco>
                    <pm:Channel Handle="sense-hat_channel_2">
                        <pm:Metric xsi:type="pm:NumericMetricDescriptor" Handle="humidity" MetricCategory="Msrmt" MetricAvailability="Cont" Resolution="1">
                            <pm:Unit Code="%"></pm:Unit>
                        </pm:Metric>
                    </pm:Channel>
                </pm:Vmd>
            </pm:Mds>
        </pm:MdDescription>
        <pm:MdState>
            <pm:State xsi:type="pm:PatientContextState" DescriptorHandle="pat_context_descriptor" Handle="pat_context_state" ContextAssociation="Assoc">
                <pm:CoreData>
                    <pm:Givenname></pm:Givenname>
                    <pm:Familyname></pm:Familyname>
                    <pm:Height MeasuredValue="0">
                        <pm:MeasurementUnit Code="123"></pm:MeasurementUnit>
                    </pm:Height>
                    <pm:Weight MeasuredValue="0">
                        <pm:MeasurementUnit Code="123"></pm:MeasurementUnit>
                    </pm:Weight>
                </pm:CoreData>
            </pm:State>
            <pm:State xsi:type="pm:LocationContextState" DescriptorHandle="loc_context_descriptor" Handle="loc_context_state" ContextAssociation="Assoc">
                <pm:LocationDetail Room="MockRoom" Facility="ICU" Bed="MockBed" />
            </pm:State>
            <pm:State xsi:type="pm:EnsembleContextState" DescriptorHandle="ens_context_descriptor" Handle="ens_context_state" ContextAssociation="Assoc">
                 <pm:Identification Root="b1111111-1111-1111-1111-111111111111" Extension="initial">
                     <pm:IdentifierName></pm:IdentifierName>
                 </pm:Identification>
            </pm:State>
            <pm:State xsi:type="pm:WorkflowContextState" DescriptorHandle="wrkflow_context_descriptor" Handle="wrkflow_context_state" ContextAssociation="Assoc">
                <pm:WorkflowDetail>
                    <pm:Patient>
                        <pm:Identification></pm:Identification>
                    </pm:Patient>
                    <pm:DangerCode Code=" ">
                        <pm:ConceptDescription></pm:ConceptDescription>
                    </pm:DangerCode>
                    <pm:RelevantClinicalInfo>
                        <pm:Criticality>Hi</pm:Criticality>
                        <pm:Description></pm:Description>
                        <pm:RelatedMeasurement>
                            <pm:Value MeasuredValue="0">
                                <pm:MeasurementUnit Code="123"></pm:MeasurementUnit>
                            </pm:Value>
                        </pm:RelatedMeasurement>
                    </pm:RelevantClinicalInfo>
                </pm:WorkflowDetail>
            </pm:State>

            <pm:State xsi:type="pm:VmdState" DescriptorHandle="vmd_1" ActivationState="On" />
            <pm:State xsi:type="pm:VmdState" DescriptorHandle="vmd_2" ActivationState="On" />

            <pm:State xsi:type="pm:AlertSystemState"  DescriptorHandle="al_system_temperature" ActivationState="On" />
            <pm:State xsi:type="pm:AlertConditionState" DescriptorHandle="al_condition_temperature" ActivationState="On" Presence="false" />
            <pm:State xsi:type="pm:AlertSignalState" DescriptorHandle="al_signal_temperature" ActivationState="On" Presence="Off" />

            <pm:State xsi:type="pm:AlertSystemState"  DescriptorHandle="al_system_humidity" ActivationState="On" />
            <pm:State xsi:type="pm:AlertConditionState" DescriptorHandle="al_condition_humidity" ActivationState="On" Presence="false" />
            <pm:State xsi:type="pm:AlertSignalState" DescriptorHandle="al_signal_humidity" ActivationState="On" Presence="Off" />

            <pm:State xsi:type="pm:SetContextStateOperationState" DescriptorHandle="set_patient_context_op" OperatingMode="En" />
            <pm:State xsi:type="pm:SetContextStateOperationState" DescriptorHandle="set_ensemble_context_op" OperatingMode="En" />

            <pm:State xsi:type="pm:SetAlertStateOperationState" DescriptorHandle="temperature_alert_control" OperatingMode="En" />
            <pm:State xsi:type="pm:SetAlertStateOperationState" DescriptorHandle="humidity_alert_control" OperatingMode="En" />
            <pm:State xsi:type="pm:SetMetricStateOperationState" DescriptorHandle="temperature_threshold_control" OperatingMode="En" />
            <pm:State xsi:type="pm:SetMetricStateOperationState" DescriptorHandle="humidity_threshold_control" OperatingMode="En" />

            <pm:State xsi:type="pm:NumericMetricState" DescriptorHandle="device_id">
                <pm:MetricValue Value="0">
                    <pm:MetricQuality Validity="Vld" />
                </pm:MetricValue>
            </pm:State>
            <pm:State xsi:type="pm:NumericMetricState" DescriptorHandle="device_health">
                <pm:MetricValue Value="0">
                    <pm:MetricQuality Validity="Vld" />
                </pm:MetricValue>
            </pm:State>
            <pm:State xsi:type="pm:EnumStringMetricState" DescriptorHandle="system_statemachine">
                <pm:MetricValue Value="Idle">
                    <pm:MetricQuality Validity="Vld" />
                </pm:MetricValue>
            </pm:State>
            <pm:State xsi:type="pm:NumericMetricState" DescriptorHandle="humidity" >
                <pm:MetricValue Value="0">
                    <pm:MetricQuality Validity="Vld" />
                </pm:MetricValue>
                <pm:PhysiologicalRange Lower="18" Upper="35"></pm:PhysiologicalRange>
            </pm:State>
            <pm:State xsi:type="pm:NumericMetricState" DescriptorHandle="temperature" >
                <pm:MetricValue Value="0">
                    <pm:MetricQuality Validity="Vld" />
                </pm:MetricValue>
                <pm:PhysiologicalRange Lower="30" Upper="45"></pm:PhysiologicalRange>
            </pm:State>
        </pm:MdState>
    </msg:Mdib>
</msg:GetMdibResponse>